PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = disgust_attention_exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine image_display
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent target
      fillColor = white
      pos [set every repeat] = (pos_x, pos_y)
      shape = triangle
      size = (35, 35)
      startVal [time (s)] = $interval
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Welcome
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    TextComponent introduction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment!

        Thank you for choosing to participate in this study. In this experiment, you will be presented with a series of images, and at random intervals, a target will appear on the screen. Your task is to press the spacebar as quickly as possible whenever the target appears. Please note that some of the images may be disturbing or unpleasant to view. If at any point you feel uncomfortable, you are free to stop the experiment. Participation is entirely voluntary, and all data collected will remain strictly confidential, used only for research purposes, and permanently deleted after the study concludes.

        If you wish to receive recieve results of your performance or have any questions, feel free to contact us at tanishq.a1@ahduni.edu.in.

        When you are ready to begin, press 'space' to start.
    KeyboardComponent start_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = img_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imagefile': 'images/1271_hygiene.jpg', 'type': ' disgust', 'subtype': 'hygiene', 'pos_x': 0, 'pos_y': -412, 'interval': 4, 'act_diff': 1},
      {'imagefile': 'images/1195_injuries_infections neutral.jpg', 'type': ' neutral', 'subtype': 'injuries_infections', 'pos_x': 562, 'pos_y': 0, 'interval': 3.7, 'act_diff': 0.7},
      {'imagefile': 'images/1011_food.jpg', 'type': ' disgust', 'subtype': 'food', 'pos_x': 562, 'pos_y': 0, 'interval': 4.3, 'act_diff': 1.3},
      {'imagefile': 'images/1298_hygiene neutral.jpg', 'type': ' neutral', 'subtype': 'hygiene', 'pos_x': 0, 'pos_y': 412, 'interval': 3.2, 'act_diff': 0.2},
      {'imagefile': 'images/1238_death.jpg', 'type': ' disgust', 'subtype': 'death', 'pos_x': 0, 'pos_y': -412, 'interval': 4.3, 'act_diff': 1.3},
      {'imagefile': 'images/1144_body products neutral.jpg', 'type': ' neutral', 'subtype': 'body products', 'pos_x': -562, 'pos_y': 0, 'interval': 3.2, 'act_diff': 0.2},
      {'imagefile': 'images/1134_body products.jpg', 'type': ' disgust', 'subtype': 'body products', 'pos_x': 562, 'pos_y': 0, 'interval': 4, 'act_diff': 1},
      {'imagefile': 'images/1248_death neutral.jpg', 'type': ' neutral', 'subtype': 'death', 'pos_x': 0, 'pos_y': 412, 'interval': 3.7, 'act_diff': 0.7},
      {'imagefile': 'images/1165_injuries_infections.jpg', 'type': ' disgust', 'subtype': 'injuries_infections', 'pos_x': 0, 'pos_y': -412, 'interval': 3.2, 'act_diff': 0.2}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
    Routine image_display
  LoopTerminator trials
  Routine thank_you
